#
includeFile = Materials.txt

s:Ge/Housing/Parent = "World"
s:Ge/Housing/Type   = "Group"
d:Ge/Housing/TransX = 50 mm
d:Ge/Housing/TransY = 1 mm 
d:Ge/Housing/TransZ = 400 mm

s:Ge/Housing/Stage0/Parent   = "Housing"
s:Ge/Housing/Stage0/Material = "G4_Fe"
s:Ge/Housing/Stage0/Type     = "TsBox"
d:Ge/Housing/Stage0/HLX      = 7.0 cm
d:Ge/Housing/Stage0/HLY      = 5.21 cm
d:Ge/Housing/Stage0/HLZ      = 0.045 cm
d:Ge/Housing/Stage0/TransX   = 18.91 cm
d:Ge/Housing/Stage0/TransY   = 0.0 cm
d:Ge/Housing/Stage0/TransZ   = -12.955 cm

s:Ge/Housing/Stage1A/Parent   = "Housing"
s:Ge/Housing/Stage1A/Material = "G4_Fe"
s:Ge/Housing/Stage1A/Type     = "TsBox"
d:Ge/Housing/Stage1A/HLX      = 25.82 cm 
d:Ge/Housing/Stage1A/HLY      = 0.045 cm
d:Ge/Housing/Stage1A/HLZ      = 13.0 cm
d:Ge/Housing/Stage1A/TransX   = 0 cm
d:Ge/Housing/Stage1A/TransY   = 5.255 cm
d:Ge/Housing/Stage1A/TransZ   = 0 cm

s:Ge/Housing/Stage1B/Parent   = "Housing"
s:Ge/Housing/Stage1B/Material = "G4_Fe"
s:Ge/Housing/Stage1B/Type     = "TsBox"
d:Ge/Housing/Stage1B/HLX      = 25.82 cm 
d:Ge/Housing/Stage1B/HLY      = 0.045 cm
d:Ge/Housing/Stage1B/HLZ      = 13.0 cm
d:Ge/Housing/Stage1B/TransX   = 0 cm
d:Ge/Housing/Stage1B/TransY   = -5.255 cm
d:Ge/Housing/Stage1B/TransZ   = 0 cm

s:Ge/Housing/Stage2A/Parent   = "Housing"
s:Ge/Housing/Stage2A/Material = "G4_Fe"
s:Ge/Housing/Stage2A/Type     = "TsBox"
d:Ge/Housing/Stage2A/HLX      = 0.045 cm 
d:Ge/Housing/Stage2A/HLY      = 5.3 cm 
d:Ge/Housing/Stage2A/HLZ      = 13.0 cm 
d:Ge/Housing/Stage2A/TransX   = 25.955 cm 
d:Ge/Housing/Stage2A/TransY   = 0 cm 
d:Ge/Housing/Stage2A/TransZ   = 0 cm 

s:Ge/Housing/Stage2B/Parent   = "Housing"
s:Ge/Housing/Stage2B/Material = "G4_Fe"
s:Ge/Housing/Stage2B/Type     = "TsBox"
d:Ge/Housing/Stage2B/HLX      = 0.045 cm 
d:Ge/Housing/Stage2B/HLY      = 5.3 cm 
d:Ge/Housing/Stage2B/HLZ      = 13.0 cm 
d:Ge/Housing/Stage2B/TransX   = -25.955 cm
d:Ge/Housing/Stage2B/TransY   = 0 cm 
d:Ge/Housing/Stage2B/TransZ   = 0 cm 

s:Ge/Housing/Stage3/Parent   = "Housing"
s:Ge/Housing/Stage3/Material = "G4_Fe"
s:Ge/Housing/Stage3/Type     = "TsBox"
d:Ge/Housing/Stage3/HLX      = 25.82 cm 
d:Ge/Housing/Stage3/HLY      = 5.21 cm 
d:Ge/Housing/Stage3/HLZ      = 0.045 cm 
d:Ge/Housing/Stage3/TransX   = 0 cm 
d:Ge/Housing/Stage3/TransY   = 0 cm 
d:Ge/Housing/Stage3/TransZ   = 12.955 cm 

s:Ge/Housing/StageW/Parent   = "Housing"
s:Ge/Housing/StageW/Material = "G4_Al"
s:Ge/Housing/StageW/Type     = "TsBox"
d:Ge/Housing/StageW/HLX      = 18.91 cm
d:Ge/Housing/StageW/HLY      = 5.2 cm 
d:Ge/Housing/StageW/HLZ      = 0.0025 cm 
d:Ge/Housing/StageW/TransX   = -7.0 cm 
d:Ge/Housing/StageW/TransY   = 0 cm 
d:Ge/Housing/StageW/TransZ   = -12.9975 cm 


# Scintillator 1
s:Ge/Scintillator1/Parent = "Housing"
s:Ge/Scintillator1/Type   = "Group"

s:Ge/Scintillator1/Box/Parent = "Scintillator1"
s:Ge/Scintillator1/Box/Material = "UPS923A"
s:Ge/Scintillator1/Box/Type     = "TsCAD"
s:Ge/Scintillator1/Box/InputFile = "ScintillatorPCT"
s:Ge/Scintillator1/Box/FileFormat = "stl"
d:Ge/Scintillator1/Box/Units = 1 mm
s:Ge/Scintillator1/Box/Color = "yellow"
d:Ge/Scintillator1/Box/TransX = -18.25  cm
d:Ge/Scintillator1/Box/TransY = -5 cm
d:Ge/Scintillator1/Box/TransZ = -2.55 cm
s:Ge/Scintillator1/Box/DrawingStyle = "Solid"

#
#s:Ge/Scintillator1/Box/Parent = "Scintillator1"
#s:Ge/Scintillator1/Box/Material = "UPS923A"
#s:Ge/Scintillator1/Box/Type     = "TsBox"
#d:Ge/Scintillator1/Box/HLX      = 18.25 cm
#d:Ge/Scintillator1/Box/HLY      = 5.0 cm 
#d:Ge/Scintillator1/Box/HLZ      = 2.55 cm
#s:Ge/Scintillator1/Box/Color    = "yellow"
#s:Ge/Scintillator1/Trd/Parent = "Scintillator1"
#s:Ge/Scintillator1/Trd/Material = "UPS923A"
#s:Ge/Scintillator1/Trd/Type     = "G4Trd"
#d:Ge/Scintillator1/Trd/HLX1      = 25.5 mm 
#d:Ge/Scintillator1/Trd/HLX2      = 25.5 mm 
#d:Ge/Scintillator1/Trd/HLY1      = 25.5 mm 
#d:Ge/Scintillator1/Trd/HLY2      = 50.0 mm 
#d:Ge/Scintillator1/Trd/HLZ       = 17.5 mm
#d:Ge/Scintillator1/Trd/RotY      = 90 deg
#d:Ge/Scintillator1/Trd/TransX    = 20.0 cm
#d:Ge/Scintillator1/Trd/TransY    = 0.0 cm
#d:Ge/Scintillator1/Trd/TransZ    = 0.0 cm
#s:Ge/Scintillator1/Trd/Color     = "yellow" 

s:Ge/PMT1/Parent = "Housing"
s:Ge/PMT1/Type   = "Group"

s:Ge/PMT1/Box/Parent = "PMT1"
s:Ge/PMT1/Box/Type   = "TsBox"
s:Ge/PMT1/Box/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT1/Box/HLX      = 15 mm
d:Ge/PMT1/Box/HLY      = 25.4 mm 
d:Ge/PMT1/Box/HLZ      = 25.4 mm 
s:Ge/PMT1/Box/DrawingStyle = "Solid"
s:Ge/PMT1/Box/Color = "blue"
s:Ge/PMT1/Box/Hole/Parent = "PMT1/Box"
s:Ge/PMT1/Box/Hole/Type   = "TsBox"
s:Ge/PMT1/Box/Hole/Material = "Vacuum"
d:Ge/PMT1/Box/Hole/HLX      = 14 mm
d:Ge/PMT1/Box/Hole/HLY      = 25.0 mm 
d:Ge/PMT1/Box/Hole/HLZ      = 25.0 mm 


s:Ge/PMT1/Cyl/Parent = "PMT1"
s:Ge/PMT1/Cyl/Type   = "TsCylinder"
s:Ge/PMT1/Cyl/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT1/Cyl/HL        = 35 mm 
d:Ge/PMT1/Cyl/RMin      = 25 mm 
d:Ge/PMT1/Cyl/RMax      = 25.4 mm 
d:Ge/PMT1/Cyl/SPhi      = 0 deg
d:Ge/PMT1/Cyl/DPhi      = 360 deg 
d:Ge/PMT1/Cyl/TransX    = 5 cm
d:Ge/PMT1/Cyl/TransY    = 0 cm
d:Ge/PMT1/Cyl/TransZ    = 0 cm
d:Ge/PMT1/Cyl/RotY      = 90 deg
s:Ge/PMT1/Cyl/DrawingStyle = "Solid"
s:Ge/PMT1/Cyl/Color = "blue"

s:Ge/SRCA1/Parent = "Housing"
s:Ge/SRCA1/Type   = "TsBox"
s:Ge/SRCA1/Material = "PMMA"
d:Ge/SRCA1/HLX      = 20.05 cm
d:Ge/SRCA1/HLY      = 5.05 cm 
d:Ge/SRCA1/HLZ      = 32.5 um 
s:Ge/SRCB1/Parent = "Housing"
s:Ge/SRCB1/Type   = "TsBox"
s:Ge/SRCB1/Material = "PMMA"
d:Ge/SRCB1/HLX      = 20.05 cm
d:Ge/SRCB1/HLY      = 5.05 cm 
d:Ge/SRCB1/HLZ      = 32.5 um 

# Scintillator 2
s:Ge/Scintillator2/Parent = "Housing"
s:Ge/Scintillator2/Type   = "Group"

s:Ge/Scintillator2/Box/Parent = "Scintillator2"
s:Ge/Scintillator2/Box/Material = "UPS923A"
s:Ge/Scintillator2/Box/Type     = "TsCAD"
s:Ge/Scintillator2/Box/InputFile = "ScintillatorPCT"
s:Ge/Scintillator2/Box/FileFormat = "stl"
d:Ge/Scintillator2/Box/Units = 1 mm
s:Ge/Scintillator2/Box/Color = "yellow"
d:Ge/Scintillator2/Box/TransX = -18.25  cm
d:Ge/Scintillator2/Box/TransY = -5 cm
d:Ge/Scintillator2/Box/TransZ = -2.55 cm
s:Ge/Scintillator2/Box/DrawingStyle = "Solid"
#s:Ge/Scintillator2/Box/Parent = "Scintillator2"
#s:Ge/Scintillator2/Box/Material = "UPS923A"
#s:Ge/Scintillator2/Box/Type     = "TsBox"
#d:Ge/Scintillator2/Box/HLX      = 18.25 cm
#d:Ge/Scintillator2/Box/HLY      = 5.0 cm 
#d:Ge/Scintillator2/Box/HLZ      = 2.55 cm
#s:Ge/Scintillator2/Box/Color    = "yellow"
#s:Ge/Scintillator2/Trd/Parent = "Scintillator2"
#s:Ge/Scintillator2/Trd/Material = "UPS923A" 
#s:Ge/Scintillator2/Trd/Type     = "G4Trd"
#d:Ge/Scintillator2/Trd/HLX1      = 25.5 mm 
#d:Ge/Scintillator2/Trd/HLX2      = 25.5 mm 
#d:Ge/Scintillator2/Trd/HLY1      = 25.5 mm 
#d:Ge/Scintillator2/Trd/HLY2      = 50.0 mm 
#d:Ge/Scintillator2/Trd/HLZ       = 17.5 mm
#d:Ge/Scintillator2/Trd/RotY      = 90 deg
#d:Ge/Scintillator2/Trd/TransX    = 20.0 cm
#d:Ge/Scintillator2/Trd/TransY    = 0.0 cm
#d:Ge/Scintillator2/Trd/TransZ    = 0.0 cm
#s:Ge/Scintillator2/Trd/Color     = "yellow" 

s:Ge/PMT2/Parent = "Housing"
s:Ge/PMT2/Type   = "Group"

s:Ge/PMT2/Box/Parent = "PMT2"
s:Ge/PMT2/Box/Type   = "TsBox"
s:Ge/PMT2/Box/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT2/Box/HLX      = 15 mm
d:Ge/PMT2/Box/HLY      = 25.4 mm 
d:Ge/PMT2/Box/HLZ      = 25.4 mm 
s:Ge/PMT2/Box/DrawingStyle = "Solid"
s:Ge/PMT2/Box/Color = "blue"
s:Ge/PMT2/Box/Hole/Parent = "PMT2/Box"
s:Ge/PMT2/Box/Hole/Type   = "TsBox"
s:Ge/PMT2/Box/Hole/Material = "Vacuum"
d:Ge/PMT2/Box/Hole/HLX      = 14 mm
d:Ge/PMT2/Box/Hole/HLY      = 25.0 mm
d:Ge/PMT2/Box/Hole/HLZ      = 25.0 mm

s:Ge/PMT2/Cyl/Parent = "PMT2"
s:Ge/PMT2/Cyl/Type   = "TsCylinder"
s:Ge/PMT2/Cyl/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT2/Cyl/HL        = 35 mm 
d:Ge/PMT2/Cyl/RMin      = 25 mm 
d:Ge/PMT2/Cyl/RMax      = 25.4 mm 
d:Ge/PMT2/Cyl/SPhi      = 0 deg
d:Ge/PMT2/Cyl/DPhi      = 360 deg 
d:Ge/PMT2/Cyl/TransX    = 5 cm
d:Ge/PMT2/Cyl/TransY    = 0 cm
d:Ge/PMT2/Cyl/TransZ    = 0 cm
d:Ge/PMT2/Cyl/RotY      = 90 deg
s:Ge/PMT2/Cyl/DrawingStyle = "Solid"
s:Ge/PMT2/Cyl/Color = "blue"

s:Ge/SRCA2/Parent = "Housing"
s:Ge/SRCA2/Type   = "TsBox"
s:Ge/SRCA2/Material = "PMMA" # PMMA
d:Ge/SRCA2/HLX      = 20.05 cm
d:Ge/SRCA2/HLY      = 5.05 cm 
d:Ge/SRCA2/HLZ      = 32.5 um 
s:Ge/SRCB2/Parent = "Housing"
s:Ge/SRCB2/Type   = "TsBox"
s:Ge/SRCB2/Material = "PMMA" # PMMA
d:Ge/SRCB2/HLX      = 20.05 cm
d:Ge/SRCB2/HLY      = 5.05 cm 
d:Ge/SRCB2/HLZ      = 32.5 um 

# Scintillator 3
s:Ge/Scintillator3/Parent = "Housing"
s:Ge/Scintillator3/Type   = "Group"

s:Ge/Scintillator3/Box/Parent = "Scintillator3"
s:Ge/Scintillator3/Box/Material = "UPS923A"
s:Ge/Scintillator3/Box/Type     = "TsCAD"
s:Ge/Scintillator3/Box/InputFile = "ScintillatorPCT"
s:Ge/Scintillator3/Box/FileFormat = "stl"
d:Ge/Scintillator3/Box/Units = 1 mm
s:Ge/Scintillator3/Box/Color = "yellow"
d:Ge/Scintillator3/Box/TransX = -18.25  cm
d:Ge/Scintillator3/Box/TransY = -5 cm
d:Ge/Scintillator3/Box/TransZ = -2.55 cm
s:Ge/Scintillator3/Box/DrawingStyle = "Solid"

#s:Ge/Scintillator3/Box/Parent = "Scintillator3"
#s:Ge/Scintillator3/Box/Material = "UPS923A"
#s:Ge/Scintillator3/Box/Type     = "TsBox"
#d:Ge/Scintillator3/Box/HLX      = 18.25 cm
#d:Ge/Scintillator3/Box/HLY      = 5.0 cm 
#d:Ge/Scintillator3/Box/HLZ      = 2.55 cm
#s:Ge/Scintillator3/Box/Color    = "yellow"
#s:Ge/Scintillator3/Trd/Parent = "Scintillator3"
#s:Ge/Scintillator3/Trd/Material = "UPS923A" 
#s:Ge/Scintillator3/Trd/Type     = "G4Trd"
#d:Ge/Scintillator3/Trd/HLX1      = 25.5 mm 
#d:Ge/Scintillator3/Trd/HLX2      = 25.5 mm 
#d:Ge/Scintillator3/Trd/HLY1      = 25.5 mm 
#d:Ge/Scintillator3/Trd/HLY2      = 50.0 mm 
#d:Ge/Scintillator3/Trd/HLZ       = 17.5 mm
#d:Ge/Scintillator3/Trd/RotY      = 90 deg
#d:Ge/Scintillator3/Trd/TransX    = 20.0 cm
#d:Ge/Scintillator3/Trd/TransY    = 0.0 cm
#d:Ge/Scintillator3/Trd/TransZ    = 0.0 cm
#s:Ge/Scintillator3/Trd/Color     = "yellow" 

s:Ge/PMT3/Parent = "Housing"
s:Ge/PMT3/Type   = "Group"

s:Ge/PMT3/Box/Parent = "PMT3"
s:Ge/PMT3/Box/Type   = "TsBox"
s:Ge/PMT3/Box/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT3/Box/HLX      = 15 mm
d:Ge/PMT3/Box/HLY      = 25.4 mm 
d:Ge/PMT3/Box/HLZ      = 25.4 mm 
s:Ge/PMT3/Box/DrawingStyle = "Solid"
s:Ge/PMT3/Box/Color = "blue"
s:Ge/PMT3/Box/Hole/Parent = "PMT3/Box"
s:Ge/PMT3/Box/Hole/Type   = "TsBox"
s:Ge/PMT3/Box/Hole/Material = "Vacuum"
d:Ge/PMT3/Box/Hole/HLX      = 14 mm
d:Ge/PMT3/Box/Hole/HLY      = 25.0 mm
d:Ge/PMT3/Box/Hole/HLZ      = 25.0 mm

s:Ge/PMT3/Cyl/Parent = "PMT3"
s:Ge/PMT3/Cyl/Type   = "TsCylinder"
s:Ge/PMT3/Cyl/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT3/Cyl/HL        = 35 mm 
d:Ge/PMT3/Cyl/RMin      = 25 mm 
d:Ge/PMT3/Cyl/RMax      = 25.4 mm 
d:Ge/PMT3/Cyl/SPhi      = 0 deg
d:Ge/PMT3/Cyl/DPhi      = 360 deg 
d:Ge/PMT3/Cyl/TransX    = 5 cm
d:Ge/PMT3/Cyl/TransY    = 0 cm
d:Ge/PMT3/Cyl/TransZ    = 0 cm
d:Ge/PMT3/Cyl/RotY      = 90 deg
s:Ge/PMT3/Cyl/DrawingStyle = "Solid"
s:Ge/PMT3/Cyl/Color = "blue"

s:Ge/SRCA3/Parent = "Housing"
s:Ge/SRCA3/Type   = "TsBox"
s:Ge/SRCA3/Material = "PMMA" # PMMA
d:Ge/SRCA3/HLX      = 20.05 cm
d:Ge/SRCA3/HLY      = 5.05 cm 
d:Ge/SRCA3/HLZ      = 32.5 um 
s:Ge/SRCB3/Parent = "Housing"
s:Ge/SRCB3/Type   = "TsBox"
s:Ge/SRCB3/Material = "PMMA" # PMMA
d:Ge/SRCB3/HLX      = 20.05 cm
d:Ge/SRCB3/HLY      = 5.05 cm 
d:Ge/SRCB3/HLZ      = 32.5 um 

# Scintillator 4
s:Ge/Scintillator4/Parent = "Housing"
s:Ge/Scintillator4/Type   = "Group"

#s:Ge/Scintillator4/Box/Parent = "Scintillator4"
#s:Ge/Scintillator4/Box/Material = "UPS923A"
#s:Ge/Scintillator4/Box/Type     = "TsBox"
#d:Ge/Scintillator4/Box/HLX      = 18.25 cm
#d:Ge/Scintillator4/Box/HLY      = 5.0 cm 
#d:Ge/Scintillator4/Box/HLZ      = 2.55 cm
#s:Ge/Scintillator4/Box/Color    = "yellow"
#s:Ge/Scintillator4/Trd/Parent = "Scintillator4"
#s:Ge/Scintillator4/Trd/Material = "UPS923A" 
#s:Ge/Scintillator4/Trd/Type     = "G4Trd"
#d:Ge/Scintillator4/Trd/HLX1      = 25.5 mm 
#d:Ge/Scintillator4/Trd/HLX2      = 25.5 mm 
#d:Ge/Scintillator4/Trd/HLY1      = 25.5 mm 
#d:Ge/Scintillator4/Trd/HLY2      = 50.0 mm 
#d:Ge/Scintillator4/Trd/HLZ       = 17.5 mm
#d:Ge/Scintillator4/Trd/RotY      = 90 deg
#d:Ge/Scintillator4/Trd/TransX    = 20.0 cm
#d:Ge/Scintillator4/Trd/TransY    = 0.0 cm
#d:Ge/Scintillator4/Trd/TransZ    = 0.0 cm
#s:Ge/Scintillator4/Trd/Color     = "yellow" 

s:Ge/Scintillator4/Box/Parent = "Scintillator4"
s:Ge/Scintillator4/Box/Material = "UPS923A"
s:Ge/Scintillator4/Box/Type     = "TsCAD"
s:Ge/Scintillator4/Box/InputFile = "ScintillatorPCT"
s:Ge/Scintillator4/Box/FileFormat = "stl"
d:Ge/Scintillator4/Box/Units = 1 mm
s:Ge/Scintillator4/Box/Color = "yellow"
d:Ge/Scintillator4/Box/TransX = -18.25  cm
d:Ge/Scintillator4/Box/TransY = -5 cm
d:Ge/Scintillator4/Box/TransZ = -2.55 cm
s:Ge/Scintillator4/Box/DrawingStyle = "Solid"

s:Ge/PMT4/Parent = "Housing"
s:Ge/PMT4/Type   = "Group"

s:Ge/PMT4/Box/Parent = "PMT4"
s:Ge/PMT4/Box/Type   = "TsBox"
s:Ge/PMT4/Box/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT4/Box/HLX      = 15 mm
d:Ge/PMT4/Box/HLY      = 25.4 mm 
d:Ge/PMT4/Box/HLZ      = 25.4 mm 
s:Ge/PMT4/Box/DrawingStyle = "Solid"
s:Ge/PMT4/Box/Color = "blue"
s:Ge/PMT4/Box/Hole/Parent = "PMT4/Box"
s:Ge/PMT4/Box/Hole/Type   = "TsBox"
s:Ge/PMT4/Box/Hole/Material = "Vacuum"
d:Ge/PMT4/Box/Hole/HLX      = 14 mm
d:Ge/PMT4/Box/Hole/HLY      = 25.0 mm
d:Ge/PMT4/Box/Hole/HLZ      = 25.0 mm

s:Ge/PMT4/Cyl/Parent = "PMT4"
s:Ge/PMT4/Cyl/Type   = "TsCylinder"
s:Ge/PMT4/Cyl/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT4/Cyl/HL        = 35 mm 
d:Ge/PMT4/Cyl/RMin      = 25 mm 
d:Ge/PMT4/Cyl/RMax      = 25.4 mm 
d:Ge/PMT4/Cyl/SPhi      = 0 deg
d:Ge/PMT4/Cyl/DPhi      = 360 deg 
d:Ge/PMT4/Cyl/TransX    = 5 cm
d:Ge/PMT4/Cyl/TransY    = 0 cm
d:Ge/PMT4/Cyl/TransZ    = 0 cm
d:Ge/PMT4/Cyl/RotY      = 90 deg
s:Ge/PMT4/Cyl/DrawingStyle = "Solid"
s:Ge/PMT4/Cyl/Color = "blue"

s:Ge/SRCA4/Parent = "Housing"
s:Ge/SRCA4/Type   = "TsBox"
s:Ge/SRCA4/Material = "PMMA" # PMMA
d:Ge/SRCA4/HLX      = 20.05 cm
d:Ge/SRCA4/HLY      = 5.05 cm 
d:Ge/SRCA4/HLZ      = 32.5 um 
s:Ge/SRCB4/Parent = "Housing"
s:Ge/SRCB4/Type   = "TsBox"
s:Ge/SRCB4/Material = "PMMA" # PMMA
d:Ge/SRCB4/HLX      = 20.05 cm
d:Ge/SRCB4/HLY      = 5.05 cm 
d:Ge/SRCB4/HLZ      = 32.5 um 

# Scintillator 5
s:Ge/Scintillator5/Parent = "Housing"
s:Ge/Scintillator5/Type   = "Group"

s:Ge/Scintillator5/Box/Parent = "Scintillator5"
s:Ge/Scintillator5/Box/Material = "UPS923A"
s:Ge/Scintillator5/Box/Type     = "TsCAD"
s:Ge/Scintillator5/Box/InputFile = "ScintillatorPCT"
s:Ge/Scintillator5/Box/FileFormat = "stl"
d:Ge/Scintillator5/Box/Units = 1 mm
s:Ge/Scintillator5/Box/Color = "yellow"
d:Ge/Scintillator5/Box/TransX = -18.25  cm
d:Ge/Scintillator5/Box/TransY = -5 cm
d:Ge/Scintillator5/Box/TransZ = -2.55 cm
s:Ge/Scintillator5/Box/DrawingStyle = "Solid"
#s:Ge/Scintillator5/Box/Parent = "Scintillator5"
#s:Ge/Scintillator5/Box/Material = "UPS923A"
#s:Ge/Scintillator5/Box/Type     = "TsBox"
#d:Ge/Scintillator5/Box/HLX      = 18.25 cm 
#d:Ge/Scintillator5/Box/HLY      = 5.0 cm 
#d:Ge/Scintillator5/Box/HLZ      = 2.55 cm
#s:Ge/Scintillator5/Box/Color    = "yellow"
#s:Ge/Scintillator5/Trd/Parent = "Scintillator5"
#s:Ge/Scintillator5/Trd/Material = "UPS923A" 
#s:Ge/Scintillator5/Trd/Type     = "G4Trd"
#d:Ge/Scintillator5/Trd/HLX1      = 25.5 mm 
#d:Ge/Scintillator5/Trd/HLX2      = 25.5 mm 
#d:Ge/Scintillator5/Trd/HLY1      = 25.5 mm 
#d:Ge/Scintillator5/Trd/HLY2      = 50.0 mm 
#d:Ge/Scintillator5/Trd/HLZ       = 17.5 mm
#d:Ge/Scintillator5/Trd/RotY      = 90 deg
#d:Ge/Scintillator5/Trd/TransX    = 20.0 cm
#d:Ge/Scintillator5/Trd/TransY    = 0.0 cm
#d:Ge/Scintillator5/Trd/TransZ    = 0.0 cm
#s:Ge/Scintillator5/Trd/Color     = "yellow" 

s:Ge/PMT5/Parent = "Housing"
s:Ge/PMT5/Type   = "Group"

s:Ge/PMT5/Box/Parent = "PMT5"
s:Ge/PMT5/Box/Type   = "TsBox"
s:Ge/PMT5/Box/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT5/Box/HLX      = 15 mm
d:Ge/PMT5/Box/HLY      = 25.4 mm 
d:Ge/PMT5/Box/HLZ      = 25.4 mm 
s:Ge/PMT5/Box/DrawingStyle = "Solid"
s:Ge/PMT5/Box/Color = "blue"
s:Ge/PMT5/Box/Hole/Parent = "PMT5/Box"
s:Ge/PMT5/Box/Hole/Type   = "TsBox"
s:Ge/PMT5/Box/Hole/Material = "Vacuum"
d:Ge/PMT5/Box/Hole/HLX      = 14 mm
d:Ge/PMT5/Box/Hole/HLY      = 25.0 mm
d:Ge/PMT5/Box/Hole/HLZ      = 25.0 mm

s:Ge/PMT5/Cyl/Parent = "PMT5"
s:Ge/PMT5/Cyl/Type   = "TsCylinder"
s:Ge/PMT5/Cyl/Material = "G4_Pyrex_Glass" # G4_Pyrex_Glass
d:Ge/PMT5/Cyl/HL        = 35 mm 
d:Ge/PMT5/Cyl/RMin      = 25 mm 
d:Ge/PMT5/Cyl/RMax      = 25.4 mm 
d:Ge/PMT5/Cyl/SPhi      = 0 deg
d:Ge/PMT5/Cyl/DPhi      = 360 deg 
d:Ge/PMT5/Cyl/TransX    = 5 cm
d:Ge/PMT5/Cyl/TransY    = 0 cm
d:Ge/PMT5/Cyl/TransZ    = 0 cm
d:Ge/PMT5/Cyl/RotY      = 90 deg
s:Ge/PMT5/Cyl/DrawingStyle = "Solid"
s:Ge/PMT5/Cyl/Color = "blue"

s:Ge/SRCA5/Parent = "Housing"
s:Ge/SRCA5/Type   = "TsBox"
s:Ge/SRCA5/Material = "PMMA" # PMMA
d:Ge/SRCA5/HLX      = 20.05 cm
d:Ge/SRCA5/HLY      = 5.05 cm 
d:Ge/SRCA5/HLZ      = 32.5 um 
s:Ge/SRCB5/Parent = "Housing"
s:Ge/SRCB5/Type   = "TsBox"
s:Ge/SRCB5/Material = "PMMA" # PMMA
d:Ge/SRCB5/HLX      = 20.05 cm
d:Ge/SRCB5/HLY      = 5.05 cm 
d:Ge/SRCB5/HLZ      = 32.5 um 

# Scintillator detector position
d:Ge/Scintillator1/TransX = -7.66 cm
d:Ge/Scintillator1/TransY = 0 cm
d:Ge/Scintillator1/TransZ = -10.35 cm # 5.1065 * i - 10.35 cm
d:Ge/PMT1/TransX = 15.59 cm
d:Ge/PMT1/TransY = 0 cm
d:Ge/PMT1/TransZ = Ge/Scintillator1/TransZ cm
d:Ge/SRCA1/TransX = -5.81 cm
d:Ge/SRCA1/TransY = 0 cm
d:Ge/SRCA1/TransZ = -7.79675 cm 
d:Ge/SRCB1/TransX = -5.81 cm
d:Ge/SRCB1/TransY = 0 cm
d:Ge/SRCB1/TransZ = -12.90325 cm 

d:Ge/Scintillator2/TransX = Ge/Scintillator1/TransX cm
d:Ge/Scintillator2/TransY = Ge/Scintillator1/TransY cm
d:Ge/Scintillator2/TransZ = -5.2435 cm
d:Ge/PMT2/TransX = Ge/PMT1/TransX cm 
d:Ge/PMT2/TransY = Ge/PMT1/TransY cm 
d:Ge/PMT2/TransZ = Ge/Scintillator2/TransZ cm   
d:Ge/SRCA2/TransX = Ge/SRCA1/TransX cm 
d:Ge/SRCA2/TransY = Ge/SRCA1/TransY cm 
d:Ge/SRCA2/TransZ = -2.69025 cm 
d:Ge/SRCB2/TransX = Ge/SRCB1/TransX cm 
d:Ge/SRCB2/TransY = Ge/SRCB1/TransY cm
d:Ge/SRCB2/TransZ = -7.79675 cm 

d:Ge/Scintillator3/TransX = Ge/Scintillator1/TransX cm
d:Ge/Scintillator3/TransY = Ge/Scintillator1/TransY cm
d:Ge/Scintillator3/TransZ = -0.137 cm 
d:Ge/PMT3/TransX = Ge/PMT1/TransX cm 
d:Ge/PMT3/TransY = Ge/PMT1/TransY cm 
d:Ge/PMT3/TransZ = Ge/Scintillator3/TransZ cm   
d:Ge/SRCA3/TransX = Ge/SRCA1/TransX cm 
d:Ge/SRCA3/TransY = Ge/SRCA1/TransY cm 
d:Ge/SRCA3/TransZ = 2.41625 cm 
d:Ge/SRCB3/TransX = Ge/SRCB1/TransX cm 
d:Ge/SRCB3/TransY = Ge/SRCB1/TransY cm
d:Ge/SRCB3/TransZ = -2.69025 cm 

d:Ge/Scintillator4/TransX = Ge/Scintillator1/TransX cm
d:Ge/Scintillator4/TransY = Ge/Scintillator1/TransY cm
d:Ge/Scintillator4/TransZ = 4.9695 cm 
d:Ge/PMT4/TransX = Ge/PMT1/TransX cm 
d:Ge/PMT4/TransY = Ge/PMT1/TransY cm 
d:Ge/PMT4/TransZ = Ge/Scintillator4/TransZ cm   
d:Ge/SRCA4/TransX = Ge/SRCA1/TransX cm 
d:Ge/SRCA4/TransY = Ge/SRCA1/TransY cm 
d:Ge/SRCA4/TransZ = 7.52275 cm 
d:Ge/SRCB4/TransX = Ge/SRCB1/TransX cm 
d:Ge/SRCB4/TransY = Ge/SRCB1/TransY cm
d:Ge/SRCB4/TransZ = 2.41625 cm 

d:Ge/Scintillator5/TransX = Ge/Scintillator1/TransX cm
d:Ge/Scintillator5/TransY = Ge/Scintillator1/TransY cm
d:Ge/Scintillator5/TransZ = 10.076 cm 
d:Ge/PMT5/TransX = Ge/PMT1/TransX cm 
d:Ge/PMT5/TransY = Ge/PMT1/TransY cm 
d:Ge/PMT5/TransZ = Ge/Scintillator5/TransZ cm   
d:Ge/SRCA5/TransX = Ge/SRCA1/TransX cm 
d:Ge/SRCA5/TransY = Ge/SRCA1/TransY cm 
d:Ge/SRCA5/TransZ = 12.62925 cm 
d:Ge/SRCB5/TransX = Ge/SRCB1/TransX cm 
d:Ge/SRCB5/TransY = Ge/SRCB1/TransY cm
d:Ge/SRCB5/TransZ = 7.52275 cm 

# Calorimeter plate
s:Ge/PlateTop/Parent = "World"
s:Ge/PlateTop/Material = "G4_Al"
s:Ge/PlateTop/Type     = "TsBox"
d:Ge/PlateTop/HLX      = 182.0 mm
d:Ge/PlateTop/HLY      = 4.765 mm
d:Ge/PlateTop/HLZ      = 119.0 mm
d:Ge/PlateTop/TransX   = 13.95 mm
d:Ge/PlateTop/TransY   = -56.765 mm
d:Ge/PlateTop/TransZ   = 392.0 mm 

