#
d:Ge/HalfLengthZ = 25.4 mm 
  
d:Ge/StepPhantomZPosition = -127.0 mm + Ge/HalfLengthZ 

s:PhantomMaterial = "G4_POLYSTYRENE" #G4_POLYETHYLENE" 

s:Ge/StepPhantom1/Type = "Group"
s:Ge/StepPhantom1/Parent = "World"
d:Ge/StepPhantom1/TransX = -114.3 mm
d:Ge/StepPhantom1/TransY = 0.0 mm
d:Ge/StepPhantom1/TransZ = Ge/StepPhantomZPosition mm 
d:Ge/StepPhantom1/RotY = 180 deg
s:Ge/StepPhantom1/CAD/Type = "TsCAD"
s:Ge/StepPhantom1/CAD/Material = PhantomMaterial
s:Ge/StepPhantom1/CAD/Parent = "StepPhantom1"
s:Ge/StepPhantom1/CAD/InputFile = "StepPhantom"
s:Ge/StepPhantom1/CAD/FileFormat = "stl"
d:Ge/StepPhantom1/CAD/Units = 1 mm
d:Ge/StepPhantom1/CAD/TransX = -50.80  mm
d:Ge/StepPhantom1/CAD/TransY = -60 mm
d:Ge/StepPhantom1/CAD/TransZ = -1.0 * Ge/HalfLengthZ mm 
s:Ge/StepPhantom1/CAD/Color = "red"
s:Ge/StepPhantom1/CAD/DrawingStyle = "Solid"

s:Ge/StepPhantom2/Type = "Group"
s:Ge/StepPhantom2/Parent = "World"
d:Ge/StepPhantom2/TransX = 0.0 mm 
d:Ge/StepPhantom2/TransY = 0.0 mm
d:Ge/StepPhantom2/TransZ = Ge/StepPhantomZPosition mm 
d:Ge/StepPhantom2/RotY = 180 deg
s:Ge/StepPhantom2/CAD/Type = "TsCAD"
s:Ge/StepPhantom2/CAD/Material = PhantomMaterial
s:Ge/StepPhantom2/CAD/Parent = "StepPhantom2"
s:Ge/StepPhantom2/CAD/InputFile = "StepPhantom"
s:Ge/StepPhantom2/CAD/FileFormat = "stl"
d:Ge/StepPhantom2/CAD/Units = 1 mm
d:Ge/StepPhantom2/CAD/TransX = -50.80  mm
d:Ge/StepPhantom2/CAD/TransY = -60 mm
d:Ge/StepPhantom2/CAD/TransZ = -1.0 * Ge/HalfLengthZ mm 
s:Ge/StepPhantom2/CAD/Color = "red"
s:Ge/StepPhantom2/CAD/DrawingStyle = "Solid"

s:Ge/StepPhantom3/Type = "Group"
s:Ge/StepPhantom3/Parent = "World"
d:Ge/StepPhantom3/TransX = 114.3 mm
d:Ge/StepPhantom3/TransY = 0.0 mm
d:Ge/StepPhantom3/TransZ = Ge/StepPhantomZPosition mm 
d:Ge/StepPhantom3/RotY = 180 deg
s:Ge/StepPhantom3/CAD/Type = "TsCAD"
s:Ge/StepPhantom3/CAD/Material = PhantomMaterial
s:Ge/StepPhantom3/CAD/Parent = "StepPhantom3"
s:Ge/StepPhantom3/CAD/InputFile = "StepPhantom"
s:Ge/StepPhantom3/CAD/FileFormat = "stl"
d:Ge/StepPhantom3/CAD/Units = 1 mm
d:Ge/StepPhantom3/CAD/TransX = -50.80  mm
d:Ge/StepPhantom3/CAD/TransY = -60 mm
d:Ge/StepPhantom3/CAD/TransZ = -1.0 * Ge/HalfLengthZ mm 
s:Ge/StepPhantom3/CAD/Color = "red"
s:Ge/StepPhantom3/CAD/DrawingStyle = "Solid"

s:Ge/Degrader/Type = "TsBox"
s:Ge/Degrader/Material = PhantomMaterial
s:Ge/Degrader/Parent = "World"
d:Ge/Degrader/HLX  = 200 mm 
d:Ge/Degrader/HLY  = 60 mm 
d:Ge/Degrader/HLZ  = 2 mm 
d:Ge/Degrader/TransX = 0 mm
d:Ge/Degrader/TransY = 0 mm 
d:Ge/Degrader/TransZ1 = Ge/StepPhantomZPosition + Ge/HalfLengthZ mm 
d:Ge/Degrader/TransZ = Ge/Degrader/TransZ1 + Ge/Degrader/HLZ mm 
s:Ge/Degrader/Color = "red"
s:Ge/Degrader/DrawingStyle = "Solid"

