# pCT geometry is spread into the following files.
includeFile = PhantomStep.txt Scorers.txt Table.txt Source.txt

b:Ge/CheckForUnusedComponents = "False"
b:Ge/CheckForOverlaps = "False"
i:Ts/MaxInterruptedHistories = 100000

# World volume is created by default for Topas as a box.
# Here we reset the dimensions to 2 m side
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 1 m
d:Ge/World/HLY = 1 m
d:Ge/World/HLZ = 1 m

# The physics list is defined here. Comment the following line
# to use the default physics list (suggested for proton therapy applications)
sv:Ph/Default/Modules = 1 "g4em-standard_opt4"

i:Ts/NumberOfThreads = 0
b:Ts/ShowCPUTime = "True"

i:Ts/Seed = 1 

# Creates a new material for the step phantom
s:PhantomMaterial = "polystyrene"
sv:Ma/polystyrene/Components = 2 "Carbon" "Hydrogen"
uv:Ma/polystyrene/Fractions  = 2 0.922 0.078
d:Ma/polystyrene/Density = 1.045 g/cm3

# Source
i:Ts/ShowHistoryCountAtInterval = 1000
d:Ge/BeamPosition/RotX = 0 deg
d:Ge/BeamPosition/TransZ = -50 cm

# Number of bricks
s:Ge/NumberOfBricks = "_1"
u:Ge/Nb = 1
d:Ge/Length = 50.8 mm * Ge/Nb
Ge/Degrader/HLZ = 0.5 * Ge/Length mm

# Set the name of the output files. The scorers are defined
# in Scorers.txt. Any parameter in the txt files can be
# modified in the main file (protonCT.txt)
# Phase Spaces
s:Sc/Plane1tin/OutputFile = "Tracker1t_In_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane1tout/OutputFile = "Tracker1t_Out_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane1vin/OutputFile = "Tracker1v_In_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane1vout/OutputFile = "Tracker1v_Out_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane2tin/OutputFile = "Tracker2t_In_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane2tout/OutputFile = "Tracker2t_Out_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane2vin/OutputFile = "Tracker2v_In_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane2vout/OutputFile = "Tracker2v_Out_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane3tin/OutputFile = "Tracker3t_In_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane3tout/OutputFile = "Tracker3t_Out_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane3vin/OutputFile = "Tracker3v_In_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane3vout/OutputFile = "Tracker3v_Out_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane4tin/OutputFile = "Tracker4t_In_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane4tout/OutputFile = "Tracker4t_Out_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane4vin/OutputFile = "Tracker4v_In_StepPhantom" + Ge/NumberOfBricks
s:Sc/Plane4vout/OutputFile = "Tracker4v_Out_StepPhantom" + Ge/NumberOfBricks

# Energy deposit per event  + Ge/NumberOfBricks
s:Sc/Edep1/OutputFile = "EdepScintillator1_StepPhantom" + Ge/NumberOfBricks
s:Sc/Edep2/OutputFile = "EdepScintillator2_StepPhantom" + Ge/NumberOfBricks
s:Sc/Edep3/OutputFile = "EdepScintillator3_StepPhantom" + Ge/NumberOfBricks
s:Sc/Edep4/OutputFile = "EdepScintillator4_StepPhantom" + Ge/NumberOfBricks
s:Sc/Edep5/OutputFile = "EdepScintillator5_StepPhantom" + Ge/NumberOfBricks

