# pCT geometry is spread into the following files.
includeFile = PhantomStep.txt Scorers.txt Source.txt view.txt
includeFile = PatientDICOM.txt

d:Ge/IncreaseDistanceBetweenCentralPlanesBy = 30 cm

i:Gr/ShowOnlyOutlineIfVoxelCountExceeds = 2100000000

# World dimension 
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 1 m
d:Ge/World/HLY = 1 m
d:Ge/World/HLZ = 1 m

b:Ge/Patient/PreLoadAllMaterials = "True"

# The physics list 
sv:Ph/Default/Modules = 1 "g4em-standard_opt4"
b:Ts/PauseBeforeQuit = "true" 
i:Ts/ShowHistoryCountAtInterval = 100 

# Creates a new material for the step phantom
s:PhantomMaterial = "polystyrene"
sv:Ma/polystyrene/Components = 2 "Carbon" "Hydrogen"
uv:Ma/polystyrene/Fractions  = 2 0.922 0.078
d:Ma/polystyrene/Density = 1.045 g/cm3

b:Ge/Degrader/Include = "False"
b:Ge/Phantom1/Include = "False"
b:Ge/Phantom2/Include = "False"
b:Ge/Phantom3/Include = "False"

# Set the position of the field with respect to the 
# world volume
d:Ge/BeamPosition/RotX = 0 deg
d:Ge/BeamPosition/TransZ = -50 cm

# Patient rotation
s:Tf/Rotation/Function = "Step"
dv:Tf/Rotation/Times   = 7 10 20 30 40 50 60 70 ms
dv:Tf/Rotation/Values  = 7 0 45  90 135 180 225 270 deg

d:Ge/PatientRotation/RotY = Tf/Rotation/Value deg
d:Tf/TimelineStart = 0.0 ms # defaults to zero
d:Tf/TimelineEnd   = 70. ms # must be larger than TimelineStart
i:Tf/NumberOfSequentialTimes = 7
 
