# pCT geometry is spread into the following files.
#includeFile = PhantomStep.txt Scorers.txt Table.txt Source.txt view.txt
#includeFile = Wedge.txt Source.txt Scorers.txt view.txt
includeFile = Wedge.txt view.txt

# World dimension 
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 1 m
d:Ge/World/HLY = 1 m
d:Ge/World/HLZ = 1 m

# The physics list 
sv:Ph/Default/Modules = 1 "g4em-standard_opt4"

b:Ts/PauseBeforeQuit = "true" 
i:Ts/ShowHistoryCountAtInterval = 10

# Creates a new material for the step phantom
#s:PhantomMaterial = "polystyrene"
#sv:Ma/polystyrene/Components = 2 "Carbon" "Hydrogen"
#uv:Ma/polystyrene/Fractions  = 2 0.922 0.078
#d:Ma/polystyrene/Density = 1.045 g/cm3
#
#u:Ge/Nb = 4
#d:Ge/Length = 50.8 mm * Ge/Nb
#Ge/Degrader/HLZ = 0.5 * Ge/Length mm

# Set the position of the field with respect to the 
# world volume
d:Ge/BeamPosition/RotX = 0 deg
d:Ge/BeamPosition/TransZ = -50 cm

