# 
i:Ts/NumberOfThreads = 0
#
s:Ge/Phantom/Parent    = "World"
s:Ge/Phantom/Type      = "TsCylinder"
s:Ge/Phantom/Material  = "G4_WATER"
d:Ge/Phantom/HL        = 10 cm
d:Ge/Phantom/RMax      = 10 cm
i:Ge/Phahtom/RBins     = 1
i:Ge/Phantom/ThetaBins = 1
i:Ge/Phantom/ZBins     = 100
s:Ge/Phantom/Color     = "grass"

s:Sc/Dose/Quantity = "DoseToMedium"
s:Sc/Dose/Component = "Phantom"
s:Sc/Dose/OutputFile = "Dose"
s:Sc/Dose/IfOutputFileAlreadyExists = "Overwrite"
sv:Sc/Dose/Report = 2 "Sum" "Standard_Deviation"

i:So/Demo/NumberOfHistoriesInRun = 1000
i:Ts/ShowHistoryCountAtInterval      = 100

s:Gr/view/Type = "OpenGl"
u:Gr/view/Zoom = 50
d:Gr/view/Theta = 45 deg
d:Gr/view/Phi   = 45 deg
b:Ts/PauseBeforeQuit = "True"
