# World volume is created by default for Topas as a box.
# Here we reset the dimensions to 2 m side
s:Ge/World/Material = "Air"
d:Ge/World/HLX = 1 m
d:Ge/World/HLY = 1 m
d:Ge/World/HLZ = 1 m
d:Ge/BeamPosition/RotX = 0 deg
d:Ge/BeamPosition/TransZ = -50 cm

# Set the number of CPUs used for the simulation. If 0, then all the 
# available CPUs will be used.
i:Ts/NumberOfThreads = 10
b:Ts/ShowCPUTime = "True"

# If multiple jobs are submitted, it is a good idea to change the
# random seed
i:Ts/Seed = SEED

d:So/Beam/HWidth = HWID mm
d:So/Beam/HHeight = HHGT mm
i:So/NProtons = NPROTON
d:Ge/Detector/Width = 349.0 mm
d:Ge/Detector/Height = 86.2 mm
d:Ge/Phantom/Angle = ROTZ deg
s:Ge/Phantom/IntegerAngle = "ANGLE"
d:Ge/Phantom/RotZ = Ge/Phantom/Angle deg
s:Sc/Output/BaseDirectory = "DIR/PHANTOM/"
s:Sc/Output/Directory0 = Sc/Output/BaseDirectory + Ge/Phantom/IntegerAngle
s:Sc/Output/Directory = Sc/Output/Directory0 + "/"
s:Gr/view/FileName = Sc/Output/Directory + "view"

# The following is for safety check. As the simulation is already tested
# then there is not need to check for overlaps
#b:Ge/CheckForUnusedComponents = "False"
#b:Ge/CheckForOverlaps = "False"
#i:Ts/MaxInterruptedHistories = 100000

i:Ts/ShowHistoryCountAtInterval = 1000

includeFile = Source.topas 
includeFile = Lab.topas
includeFile = Scorers.topas
includeFile = PHANTOM.topas

